PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = nback_flanker_no_pupil
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine ITI
    RoutineSettingsComponent ITI
      saveStartStop = False
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    TextComponent fixation
      letterHeight = 0.25
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
      units = norm
      wrapWidth = 1.8
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    CodeComponent trigger_iti
      Code Type = Py
      Begin Routine:
        iti_trigger_started = False
      Each Frame:
        if fixation.status == STARTED and not iti_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=iti_start_code)
            iti_trigger_started = True
  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 108 (task ID for nback flanker task)
        task_ID_code = 108
        print("Starting experiment: < N-back Flanker Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        iti_start_code = 9
        letter_start_code = 10
        cue_start_code = 11
        feedback_start_code = 12
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        """
        Congruency is defined at the response level depending on the N-back task correct response.

        0-Back trial types:
            A) Correct response = NO (C_t != H)
                A1 EASY  (congruent):   F_t ≠ C_t
                A2 HARD  (incongruent): F_t = C_t

            B) Correct response = YES (C_t = H)
                B1 EASY  (congruent):   F_t = C_t
                B2 HARD  (incongruent): F_t ≠ C_t

        1-Back trial types:
            A) Correct response = NO (C_t != C_{t-1})
                A1 EASY  (congruent):   F_t ≠ C_t, F_t ≠ C_{t-1}, F_t ≠ F_{t-1}
                A2 HARD  (incongruent): F_t = C_t  and  F_t = F_{t-1}

            B) Correct response = YES (C_t = C_{t-1})
                B1 EASY  (congruent):   F_t = C_t  (== C_{t-1})
                B2 HARD  (incongruent): F_t ≠ C_t  and  F_t ≠ F_{t-1}

        Implementation notes:
        - We generate the entire 1-back block using a seed previous state (C_{-1}, F_{-1}).
        - A2 is only feasible if F_{t-1} != C_{t-1}. The scheduler always chooses from remaining feasible types; if A2 isn't
          feasible at a step, it is deferred until it becomes feasible later.
        - We distribute trial types evenly: base = n_trials // 4 for each trial type
        """

        # single RNG for this session
        rng = np.random.default_rng()

        # ------------------------------------------------------
        # Letters used in the task
        # ------------------------------------------------------
        letters = ['S', 'H', 'C', 'F']
        target0 = 'H'  # target letter in the 0-back block

        # ------------------------------------------------------
        # Visual stimuli durations
        # ------------------------------------------------------
        stimulusDur = 0.5  # seconds
        cueDur = 3.0       # seconds
        respCueJitter = [1.5, 3.5]  # seconds

        # ------------------------------------------------------
        # Numbers of blocks and trials
        # ------------------------------------------------------
        n_back_blocks = [0, 1]  # 0-back first, then 1-back
        n_practice = 20
        n_main = 160


        # ------------------------------------------------------
        # Helper functions
        # ------------------------------------------------------
        def pick_not_in(excluded, rng, letters=letters):
            """
            pick a random letter NOT in a set
            """
            candidates = [letter for letter in letters if letter not in excluded]
            return rng.choice(candidates)


        def other(x, rng, letters=letters):
            """
            pick any letter except x
            """
            candidates = [letter for letter in letters if letter != x]
            return rng.choice(candidates)


        def _type_counts(n_trials):
            types = ['A1', 'A2', 'B1', 'B2']
            base = n_trials // 4
            rem = n_trials % 4
            assert rem == 0, "n_trials must be multiple of 4 for balancing."
            counts = {b: base for b in types}
            return counts


        # ======================================================
        # 0-BACK
        # ======================================================
        def make_0back(n_trials, target, rng):
            """
            make_0back():
                Builds a FULLY BALANCED 0-back block across the four trial types (A1, A2, B1, B2)
            """
            counts = _type_counts(n_trials)  # dict: {'A1': n, 'A2': n, 'B1': n, 'B2': n}
            rows = []

            for b in counts.keys():
                for _ in range(counts[b]):

                    if b == 'A1':  # NO + congruent
                        C = other(target, rng)
                        F = pick_not_in({C, target}, rng)
                        resp_correct = 'NO'
                        resp_cong = 'congruent'

                    elif b == 'A2':  # NO + incongruent
                        C = other(target, rng)
                        F = C
                        resp_correct = 'NO'
                        resp_cong = 'incongruent'

                    elif b == 'B1':  # YES + congruent
                        C = target
                        F = C
                        resp_correct = 'YES'
                        resp_cong = 'congruent'

                    else:  # B2: YES + incongruent
                        C = target
                        F = other(target, rng)
                        resp_correct = 'YES'
                        resp_cong = 'incongruent'

                    rows.append(dict(
                        n_back=0,
                        central_letter=C,
                        flanker_letter=F,
                        congruency=resp_cong,
                        is_target=int(resp_correct == 'YES'),
                        correctAns=resp_correct,
                        correctKey=('1' if resp_correct == 'YES' else '2'),
                        type=b,
                    ))

            # randomize order with RNG
            rng.shuffle(rows)
            return rows


        # ======================================================
        # 1-BACK
        # ======================================================
        def make_1back(n_trials, rng, max_run=2):
            """
            make_1back():
                Builds a FULLY BALANCED 1-back block across the four trial types (A1, A2, B1, B2)

                Key features:
                    • Balances type counts
                    • Enforces all feasibility rules:
                        - A2 only possible if previous trial had F_prev != C_prev
                        - No more than 'max_run' repeats of same type in a row
                    • Uses a seed previous state (C_prev, F_prev).
                    • Uses backtracking with a hard call limit to avoid infinite loops.

                Returns:
                    rows - list of dictionaries ready for PsychoPy trial loops.
            """
            # Set max recursive/backtracking calls based on n_trials
            max_calls = n_trials * 1e4

            # Seed "previous" state
            C_prev = rng.choice(letters)
            F_prev = rng.choice([letter for letter in letters if letter != C_prev])

            # Remaining quota for each type
            remaining = _type_counts(n_trials)  # dict: {'A1': n, 'A2': n, 'B1': n, 'B2': n}
            rows = []

            # Burner trial (t = 0): logged as first row but not assigned a type
            rows.append(dict(
                n_back=1,
                central_letter=C_prev,
                flanker_letter=F_prev,
                congruency=None,
                is_target=None,
                correctAns=None,
                correctKey=None,
                type=None,
            ))

            # --- Safety: limit total recursive/backtracking calls so we don't "freeze" ---
            call_count = {'n': 0}  # mutable wrapper so inner function can update

            # -----------------------------------------
            # Internal helper: which trial types are allowed next?
            # -----------------------------------------
            def candidates(Cp, Fp, last_type, run_len, remaining):
                """
                Determine which type choices are feasible for the next trial,
                based on:
                    - remaining quota for each trial type
                    - max_run constraint for the same trial type
                    - A2 feasibility rule (needs F_prev != C_prev)
                """
                feas = []
                for b in ('A1', 'A2', 'B1', 'B2'):
                    if remaining[b] == 0:
                        continue
                    if b == last_type and run_len >= max_run:
                        continue
                    if b == 'A2' and Fp == Cp:
                        # A2 (NO, hard) only possible when F_prev != C_prev
                        continue
                    feas.append(b)

                if not feas:
                    return []

                # Weighted random sampling without replacement:
                def priority(b):
                    bias = 2.0 if b == 'A2' else 1.0
                    return rng.random() ** (1.0 / (remaining[b] * bias))

                # Sort so that larger weights tend to come first
                ordered = sorted(feas, key=priority, reverse=True)

                return ordered

            # -----------------------------------------
            # Recursive backtracking scheduler
            # -----------------------------------------
            def step(Cp, Fp, last_type, run_len, remaining):
                """
                Recursively assign types and build the entire block.
                Backtracks whenever a choice leads to dead-end later.
                """
                # Bump global call counter and bail if too big
                call_count['n'] += 1
                if call_count['n'] > max_calls:

                    # print out the types assigned so far for debugging
                    assigned_types = [r['type'] for r in rows]
                    print(f"C_prev={C_prev}, F_prev={F_prev} failed after {call_count['n']} calls."
                          f"Cp={Cp}, Fp={Fp}, remaining={remaining}. trial count: {len(assigned_types)}")
                    raise RuntimeError("Exceeded max recursive calls in make_1back().")

                # Done when all type counts are zero
                if sum(remaining.values()) == 0:
                    return True

                cand = candidates(Cp, Fp, last_type, run_len, remaining)

                # No valid type for next trial -> backtrack
                if not cand:
                    return False

                for b in cand:
                    # Generate next (C_t, F_t) based on type rules
                    if b == 'B1':
                        # YES, easy: C_t = C_prev, F_t = C_t
                        C_t = Cp
                        F_t = C_t
                        resp_correct = 'YES'
                        resp_cong = 'congruent'

                    elif b == 'B2':
                        # YES, hard: C_t = C_prev, F_t != C_t and != F_prev
                        C_t = Cp
                        F_t = pick_not_in({C_t, Fp}, rng)
                        resp_correct = 'YES'
                        resp_cong = 'incongruent'

                    elif b == 'A1':
                        # NO, easy: C_t != C_prev, F_t != C_t, C_prev, F_prev
                        C_t = pick_not_in({Cp}, rng)
                        F_t = pick_not_in({C_t, Cp, Fp}, rng)
                        resp_correct = 'NO'
                        resp_cong = 'congruent'

                    else:  # 'A2'
                        # NO, hard: C_t = F_prev (and F_prev != C_prev), F_t = C_t
                        C_t = Fp
                        F_t = C_t
                        resp_correct = 'NO'
                        resp_cong = 'incongruent'

                    # Use up one slot of this type
                    remaining[b] -= 1

                    rows.append(dict(
                        n_back=1,
                        central_letter=C_t,
                        flanker_letter=F_t,
                        congruency=resp_cong,
                        is_target=int(resp_correct == 'YES'),
                        correctAns=resp_correct,
                        correctKey=('1' if resp_correct == 'YES' else '2'),
                        type=b,
                    ))

                    # Track run length for this type
                    new_run = run_len + 1 if b == last_type else 1

                    # Recurse; if success, return True
                    if step(C_t, F_t, b, new_run, remaining):
                        return True

                    # Backtrack
                    rows.pop()
                    remaining[b] += 1

                return False

            # -----------------------------------------
            # Constructing the 1-back block
            # -----------------------------------------
            step(C_prev, F_prev, last_type=None, run_len=0, remaining=remaining)

            return rows


        # ======================================================
        # PRACTICE + MAIN TRIAL SETUP
        # ======================================================
        practice0 = make_0back(n_trials=n_practice, target=target0, rng=rng)
        practice1 = make_1back(n_trials=n_practice, rng=rng)
        trials0 = make_0back(n_trials=n_main, target=target0, rng=rng)

        # Due to the complexity of balancing 1-back blocks, we regenerate until we get a valid one.
        while True:
            try:
                trials1 = make_1back(n_trials=n_main, rng=rng)
                break
            except RuntimeError:
                continue

        # ======================================================
        # Sanity checks
        # ======================================================
        # Create a histogram of A2 positions
        # import matplotlib.pyplot as plt
        # A2_positions = [i for i, r in enumerate(trials1) if r['type'] == 'A2']
        # plt.hist(A2_positions, bins=10, range=(0, len(trials1)))
        # plt.show()

        # Make sure type counts are balanced across trials
        for name, lst in [
            ('practice0', practice0),
            ('practice1', practice1),
            ('0back',     trials0),
            ('1back',     trials1),
        ]:
            counts = {'A1': 0, 'A2': 0, 'B1': 0, 'B2': 0}
            for r in lst:
                assert 'congruency' in r and 'correctKey' in r and 'type' in r, \
                    f"Missing labels in {name}"
                if r['type'] is not None:
                    counts[r['type']] += 1

            base = len(lst) // 4
            for b in counts.keys():
                assert counts[b] == base, f"Unbalanced type counts in {name}: {counts}"
  Routine __end__
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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    CodeComponent trigger_trial_block_end
      Code Type = Py
      Begin Routine:
        # End of main experiment trial block
        dev.activate_line(bitmask=block_end_code)
        # no need to wait 500ms as this routine lasts 3.0s before experiment ends
  Routine welcome
    RoutineSettingsComponent welcome
      saveStartStop = False
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    CodeComponent blockSetup
      Code Type = Py
      Begin Routine:
        # --- Determine n-back level for this block ---
        # n_back_blocks is defined in the __start__ routine: [0, 1]
        n_back = n_back_blocks[nbackBlocks.thisRepN]  # 0-back for first block, 1-back for second

        # --- Select the correct condition lists for this block ---
        if n_back == 0:
            practiceBlockTrials  = practice0   # 0-back practice
            blockTrials          = trials0     # main 0-back trials

        else:
            practiceBlockTrials  = practice1   # 1-back practice
            blockTrials          = trials1     # main 1-back trials

        # --- Show welcome screen only for FIRST block ---
        if nbackBlocks.thisRepN > 0:
            continueRoutine = False

            # End the main experiment trial block from the previous loop
            dev.activate_line(bitmask=block_end_code)
            core.wait(0.5)  # wait 500ms before next block start trigger
    TextComponent welcomeText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome!


        In this task, you will see a CENTER letter.
        Letters also appear on the sides, but you can ignore them.


        Press any of the white keys to continue
    KeyboardComponent welcomeKey
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practiceIntro
    RoutineSettingsComponent practiceIntro
      saveStartStop = False
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    CodeComponent setPracInstruct
      Code Type = Py
      Begin Routine:
        phase = 'practice'

        if n_back == 0:
            practice_instruct_msg = (
                "0-Back Practice\n"
                "\n"
                "\n"
                "Rule: Look for the target letter " + target0 + "\n"
                "\n"
                "Press GREEN key if the CENTER letter is " + target0 + ".\n"
                "Press RED key for any other letter.\n"
                "\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to start practice trials"
            )

        else:
            practice_instruct_msg = (
                "1-Back Practice\n"
                "\n"
                "\n"
                "Rule: Compare the current CENTER letter to the PREVIOUS CENTER letter\n"
                "\n"
                "Press GREEN key if the CENTER letter is the SAME as the previous CENTER letter.\n"
                "Press RED key if the CENTER letter is DIFFERENT from the previous CENTER letter.\n"
                "\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to start practice trials"
            )

        # Start a practice block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms as instructions are displayed
    TextComponent pracInstruct
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $practice_instruct_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent pracInstructKey
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
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    CodeComponent trialSetup
      Code Type = Py
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      Begin Routine:
        # The following variables are already defined at this point:
        #   phase == 'practice'  (set in practiceIntro)  OR
        #   phase == 'main'      (set in trialIntro)
        #
        # blockSetup in the welcome routine created:
        #   practiceBlockTrials : list of practice rows for this block
        #   blockTrials         : list of main rows for this block

        # Get that row from the pre-built list
        if phase == 'practice':
            row = practiceBlockTrials[practice.thisRepN]

        else:
            row = blockTrials[trials.thisRepN]

        # Jittered cueOnset: time when '+' appears, AFTER the letters disappear
        cueOnset = rng.uniform(respCueJitter[0], respCueJitter[1]) + stimulusDur  # stimulusDur = 0.5

        # Construct the letter
        letter_txt = row['flanker_letter']*3 + row['central_letter'] + row['flanker_letter']*3
      End Routine:
        thisExp.addData('central_letter', row['central_letter'])
        thisExp.addData('flanker_letter', row['flanker_letter'])
        thisExp.addData('congruency', row['congruency'])
        thisExp.addData('correctKey', row['correctKey'])
    TextComponent leftFlank
      disabled = True
      durationEstim = 0.5
      letterHeight = 0.15
      pos = (-0.14, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDur
      text [set every repeat] = $row['flanker_letter']*3
      units = norm
      wrapWidth = 1.8
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    TextComponent central
      durationEstim = 0.5
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDur
      text [set every repeat] = $letter_txt
      units = norm
      wrapWidth = 1.8
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    TextComponent rightFlank
      disabled = True
      durationEstim = 0.5
      letterHeight = 0.15
      pos = (0.14, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stimulusDur
      text [set every repeat] = $row['flanker_letter']*3
      units = norm
      wrapWidth = 1.8
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    TextComponent respCue
      durationEstim = 3.0
      letterHeight = 0.2
      startEstim = 2.0
      startVal [time (s)] = $cueOnset
      stopVal [duration (s)] = $cueDur
      text = < >
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent earlyResp
      allowedKeys = '1', '2'
      durationEstim = 2.0
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [time (s)] = $cueOnset
      store = all keys
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    KeyboardComponent resp
      allowedKeys = '1','2'
      durationEstim = 3.0
      forceEndRoutine = True
      startEstim = 2.0
      startVal [time (s)] = $cueOnset
      stopVal [duration (s)] = $cueDur
      store = first key
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    CodeComponent trigger_trial
      Code Type = Py
      Begin Routine:
        letter_trigger_started = False
        cue_trigger_started = False
      Each Frame:
        if central.status == STARTED and not letter_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=letter_start_code)
            letter_trigger_started = True

        if respCue.status == STARTED and not cue_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=cue_start_code)
            cue_trigger_started = True
  Routine feedback
    RoutineSettingsComponent feedback
      saveStartStop = False
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    CodeComponent setFbText
      Code Type = Py
      Begin Routine:
        # ---- Feedback logic for practice ----
        # Get early press (before cue)
        early_key = earlyResp.keys

        # Get main press (after cue)
        main_key = resp.keys

        # 1) Too fast: pressed BEFORE cue onset
        if early_key is not None:
            fb_msg = "Too fast. Wait for the cue to respond."

        # 2) Otherwise, if they responded after cue, score it
        elif main_key is not None:
            fb_msg = "Correct!" if main_key == row['correctKey'] else "Incorrect"

        # 3) No response at all
        else:
            fb_msg = "Too slow. Please try to respond quickly."
    TextComponent fbText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $fb_msg
      units = norm
      wrapWidth = 1.8
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    CodeComponent trigger_fb
      Code Type = Py
      Begin Routine:
        feedback_trigger_started = False
      Each Frame:
        if fbText.status == STARTED and not feedback_trigger_started:
            win.callOnFlip(dev.activate_line, bitmask=feedback_start_code)
            feedback_trigger_started = True
  Routine trialIntro
    RoutineSettingsComponent trialIntro
      saveStartStop = False
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    CodeComponent setInstruct
      Code Type = Py
      Begin Routine:
        phase = 'main'

        if n_back == 0:
            instruct_msg = (
                "0-Back Trials\n"
                "\n"
                "\n"
                "Target letter: " + target0 + "\n"
                "\n"
                "Press GREEN key if the CENTER letter is " + target0 + ".\n"
                "Press RED key for any other letter.\n"
                "\n"
                "You can ignore the letters on the sides, and you won't receive feedback.\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to begin"
            )

        else:
            instruct_msg = (
                "1-Back Trials\n"
                "\n"
                "\n"
                "Press GREEN key if the CENTER letter is the SAME as the previous CENTER letter.\n"
                "Press RED key if the CENTER letter is DIFFERENT from the previous CENTER letter.\n"
                "\n"
                "You can ignore the letters on the sides, and you won't receive feedback.\n"
                "Wait for the '< >' prompt before responding.\n"
                "\n"
                "\n"
                "Press the green key to begin"
            )

        # End the practice block
        dev.activate_line(bitmask=block_end_code)
        core.wait(0.5)  # wait 500ms before next block start trigger

        # Start a main experiment trial block
        dev.activate_line(bitmask=block_start_code)
        # no need to wait 500ms as instructions are displayed
    TextComponent instruct
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruct_msg
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent instructKey
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine proceed
    RoutineSettingsComponent proceed
      saveStartStop = False
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    TextComponent text_proceed
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        This is the end of practice. Do you have any questions?

        If you would like to repeat the practice block, press the red key.
        If you are ready to proceed to the real task, press the green key.
    KeyboardComponent key_proceed
      allowedKeys = '1', '2'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_proceed
      Code Type = Py
      End Routine:
        if key_proceed.keys == '1':  # proceed to main experiment
            practice_loop.finished = True
Flow
  Routine __start__
  LoopInitiator nbackBlocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = len(n_back_blocks)
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    Routine welcome
    Routine practiceIntro
    LoopInitiator practice_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 99
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      Routine ITI
      LoopInitiator practice loopType="TrialHandler"
        loopType = sequential
        nReps = len(practiceBlockTrials)
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        conditions:
          [OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'C'), ('congruency', 'incongruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'S'), ('flanker_letter', 'H'), ('congruency', 'incongruent'), ('is_target', 0), ('correctAns', 'd'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'C'), ('flanker_letter', 'C'), ('congruency', 'congruent'), ('is_target', 0), ('correctAns', 'd'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'F'), ('congruency', 'incongruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')]),
          OrderedDict([('n_back', 0), ('central', 'H'), ('flanker_letter', 'H'), ('congruency', 'congruent'), ('is_target', 1), ('correctAns', 'l'), ('fixed_0back_target', 'H')])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
        Routine trial
        Routine feedback
        Routine ITI
      LoopTerminator practice
      Routine proceed
    LoopTerminator practice_loop
    Routine trialIntro
    Routine ITI
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = len(blockTrials)
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      Routine trial
      Routine ITI
    LoopTerminator trials
  LoopTerminator nbackBlocks
  Routine __end__
